<?xml version="1.0" encoding="utf-8"?>
<Script>
  <Context>Zen26</Context>
  <Version>1.0</Version>
  <Language>Python</Language>
  <Text>
###################### where to put this file before running it ######################################
# This is a diagnostic, kept out of the production macros in ZeissAPI/diagnostics/.
# Standalone: it does not import zen_lib and reads no config. Copy it into any folder ZEN loads
# macros from and run it from the macro editor.
#
###################### what this macro does ############################################################
# Chooses the laser power of an FCS measurement from the sample itself:
#
#   1. SCAN_EXPERIMENT, a short FCS measurement, runs once for every power in POWERS, lowest first,
#      while the count rate and then the counts per molecule (CPM) are read live from ZEN's detector
#      counting panel. A count rate above MAX_COUNT_RATE_KHZ ends the scan: that measurement runs to
#      its end, because no call that stops a running one has been tried on the instrument, the
#      higher powers are skipped and that power stays out of the curve
#   2. the CPM curve is median filtered over 3 neighbouring powers and its highest point is taken
#   3. MAIN_EXPERIMENT, the normal measurement, runs once at that power times POWER_FRACTION.
#      Nothing is read during it; ZEN saves its .fcs and .raw files as usual
#
# The scan and the measurement are two experiments because the measurement time then stays a setting
# of each experiment, and the macro needs no call that has not run on the instrument.
#
# The route to the panel was measured with probe_fcs_live_values.czmac and smart_fcs runs before this
# one: the windows of ZEN hold FcsDetectorCountingViewModel as a DataContext, Execute keeps the UI
# thread running so a second thread can read, and the panel's method can be set from a macro.
# The panel keeps showing the PREVIOUS measurement until its list empties, so a value counts only
# after the list has been seen empty. The first fresh value came about 3.8 s after the start, so
# SCAN_EXPERIMENT must be long enough to deliver one. A power that gives none is left out of the curve.
#
# CPM rises with the power and bends over when the dye saturates or bleaches, so the top of the curve
# is already past the linear range. POWER_FRACTION below 1 measures below it.
#
# Before running: open the detector counting panel with its averaging set as wanted.
#
# The stage and the focus are not moved. Powers are changed in memory only and put back at the end,
# also after an error, and so is the method of the panel. The experiments are not saved - if ZEN later
# asks whether to save changes to them, answer No.
#
# Output: smart_fcs_YYYYMMDD_HHMMSS.json on the Desktop, with every sample as the panel showed it,
# plus a window with the curve and the chosen power.

import clr
clr.AddReference("WindowsBase")
clr.AddReference("PresentationCore")
clr.AddReference("PresentationFramework")

import json
import re
import time

from System import Action, Enum, Environment, TimeSpan
from System.IO import Path
from System.Threading import Thread, ThreadStart
from System.Windows import Application
from System.Windows.Media import VisualTreeHelper
from System.Windows.Threading import DispatcherOperationStatus, DispatcherPriority


###################### settings ########################################################################

SCAN_EXPERIMENT = "FCS_scan"                # short FCS measurement, as saved in ZEN
MAIN_EXPERIMENT = "FCS_main"                # the normal FCS measurement, as saved in ZEN
LASER_LINE = "MTBLKM980LaserLine639"        # id of the laser line, as in smart_SLB_imaging

POWERS = [0.1, 0.2, 0.3, 0.4, 0.5, 0.7, 1.0, 1.3, 1.6, 2.0]     # %, lowest first
POWER_FRACTION = 1.0        # 1.0 = the top of the CPM curve; below 1 stays under it
MIN_POINTS = 3              # fewer powers with a value than this and MAIN_EXPERIMENT does not run
MAX_COUNT_RATE_KHZ = 50.0   # a count rate above this ends the scan

SAMPLE_SECONDS = 0.5        # pause between readings of the panel
SETTLE_SECONDS = 2.0        # pause after switching or running an experiment, as in the pipeline
UI_WAIT_SECONDS = 3.0       # how long one reading waits for the UI thread
MAX_SAMPLES = 3600          # a stop, in case a measurement never reports its end

VIEW_MODEL_NAME = "FcsDetectorCountingViewModel"


###################### reporting #######################################################################

REPORT = []


def report(text):
    REPORT.append(text)


###################### laser power #####################################################################


def find_laser_intensity(experiment):
    """
    The Intensity parameter of the laser line, along the same path as ZenApi._laser_intensity, and
    like there looked up again on every use.
    """
    for setup in experiment.Core.CurrentExperimentBlock.SubDimensionSetups:
        if not hasattr(setup, "ActivatedTracks"):
            continue

        for track in setup.ActivatedTracks:
            for collection in track.SelectedDetectionModeSetup.TrackLaserSettings.ParameterCollections:
                if str(collection.Id) == LASER_LINE:
                    return collection["Intensity"]

    raise Exception("{} not found in {}".format(LASER_LINE, experiment.Name))


def activate(name):
    experiment = Zen.Acquisition.Experiments.GetByName(name)

    if experiment is None:
        raise Exception("experiment {} not found".format(name))

    experiment.SetActive()
    time.sleep(SETTLE_SECONDS)
    return experiment


###################### the panel #######################################################################


def find_view_model():
    """
    Walks the windows of ZEN for the view model of the panel. The macro runs on the UI thread, the
    only one allowed to do this.
    """
    for window in Application.Current.Windows:
        stack = [window]

        while stack:
            element = stack.pop()
            context = getattr(element, "DataContext", None)

            if context is not None and context.GetType().Name == VIEW_MODEL_NAME:
                return context

            for index in xrange(VisualTreeHelper.GetChildrenCount(element)):
                stack.append(VisualTreeHelper.GetChild(element, index))

    return None


def find_method(view_model, word):
    """
    The member of the DetectorCountingMethod enum with word in its name, or None.
    """
    for method in Enum.GetValues(view_model.SelectedCountingMethod.GetType()):
        if word in str(method).lower():
            return method

    return None


def parse_value(text):
    """
    The number at the start of what the panel shows, such as '3.671 kHz', or None.
    """
    match = re.search(r"-?[0-9]+([.,][0-9]+)?", text)

    return float(match.group(0).replace(",", ".")) if match else None


###################### reading during a measurement ####################################################

STATE = {"view_model": None, "count_rate_method": None, "cpm_method": None, "stop": False, "fresh": False,
         "skip": False, "started": 0.0, "samples": [], "count_rate": None, "cpm": None}


def tick():
    """
    One reading of the panel, on the UI thread. A value counts only after the list has been empty
    once in this measurement; before that it belongs to the previous one. The first fresh count rate
    switches the panel to CPM, and the reading right after a switch is skipped, because it may still
    show the old method.
    """
    try:
        view_model = STATE["view_model"]
        method = str(view_model.SelectedCountingMethod)
        values = [str(entry.Value) for entry in view_model.CountRateValues]

        STATE["samples"].append({"t_s": round(time.time() - STATE["started"], 1), "method": method,
                                 "values": values})

        if len(values) == 0:
            STATE["fresh"] = True
            return

        if STATE["skip"]:
            STATE["skip"] = False
            return

        number = parse_value(values[0])

        if not STATE["fresh"] or number is None:
            return

        if method == str(STATE["count_rate_method"]):
            STATE["count_rate"] = number
            view_model.SelectedCountingMethod = STATE["cpm_method"]
            STATE["skip"] = True
        else:
            STATE["cpm"] = number

    except Exception as error:
        STATE["samples"].append({"error": str(error)})


def reading_loop():
    dispatcher = Application.Current.Dispatcher

    for index in xrange(MAX_SAMPLES):
        if STATE["stop"]:
            return

        operation = dispatcher.BeginInvoke(DispatcherPriority.Normal, Action(tick))

        if operation.Wait(TimeSpan.FromSeconds(UI_WAIT_SECONDS)) != DispatcherOperationStatus.Completed:
            operation.Abort()
            STATE["samples"].append({"error": "UI thread busy"})

        time.sleep(SAMPLE_SECONDS)


def measure(experiment):
    """
    Runs the experiment once and reads the panel while it runs.
    :return: tuple (first fresh count rate or None, last fresh CPM or None, list of all samples)
    """
    STATE.update({"stop": False, "fresh": False, "skip": False, "started": time.time(), "samples": [],
                  "count_rate": None, "cpm": None})
    STATE["view_model"].SelectedCountingMethod = STATE["count_rate_method"]

    thread = Thread(ThreadStart(reading_loop))
    thread.IsBackground = True
    thread.Start()

    try:
        Zen.Acquisition.Execute(experiment)
    finally:
        STATE["stop"] = True
        thread.Join(TimeSpan.FromSeconds(UI_WAIT_SECONDS + SAMPLE_SECONDS + 1))

    return STATE["count_rate"], STATE["cpm"], STATE["samples"]


###################### choosing the power ##############################################################


def over_limit(count_rate):
    return count_rate is not None and count_rate &gt; MAX_COUNT_RATE_KHZ


def smooth(values):
    """
    Median of every value and its neighbours, so that one noisy short measurement cannot win alone,
    which a mean does not prevent. At the two ends, with one neighbour, the lower of the two.
    """
    result = []

    for index in range(len(values)):
        window = sorted(values[max(index - 1, 0):index + 2])
        result.append(window[(len(window) - 1) // 2])

    return result


def choose_power(points):
    """
    :param list points: (power, CPM) of the powers that gave a value, lowest power first
    :return: the lowest power at the top of the smoothed curve, times POWER_FRACTION
    """
    smoothed = smooth([cpm for power, cpm in points])
    top = smoothed.index(max(smoothed))

    return round(points[top][0] * POWER_FRACTION, 4)


###################### run ############################################################################

scan = activate(SCAN_EXPERIMENT)
original_scan_power = find_laser_intensity(scan).Value

view_model = find_view_model()
if view_model is None:
    raise Exception("the detector counting panel was not found - open it and run the macro again")

STATE["view_model"] = view_model
STATE["count_rate_method"] = find_method(view_model, "countrate")
STATE["cpm_method"] = find_method(view_model, "molecule")

if STATE["count_rate_method"] is None or STATE["cpm_method"] is None:
    raise Exception("the panel has no count rate or no counts per molecule method")

original_method = view_model.SelectedCountingMethod

report("scan {}, main {}, laser {}".format(SCAN_EXPERIMENT, MAIN_EXPERIMENT, LASER_LINE))

measurements = []
points = []
chosen = None
main_result = None

try:
    for power in POWERS:
        entry = {"power_percent": power}
        measurements.append(entry)

        find_laser_intensity(scan).Value = str(power)

        try:
            count_rate, cpm, samples = measure(scan)
        except Exception as error:
            entry["error"] = str(error)
            report("{} %: FAILED - {}".format(power, error))
            continue

        entry["count_rate_khz"] = count_rate
        entry["cpm_khz"] = cpm
        entry["samples"] = samples
        report("{} %: count rate {} kHz, CPM {} kHz".format(power, count_rate, cpm))

        if over_limit(count_rate):
            entry["over_limit"] = True
            report("count rate above {} kHz - scan stopped, {} % stays out of the curve".format(
                MAX_COUNT_RATE_KHZ, power))
            break

        if cpm is not None:
            points.append((power, cpm))

        time.sleep(SETTLE_SECONDS)

finally:
    view_model.SelectedCountingMethod = original_method

    try:
        find_laser_intensity(scan).Value = original_scan_power
    except Exception as error:
        report("RESTORE FAILED - {} - set {} back to {} % by hand".format(error, SCAN_EXPERIMENT, original_scan_power))

if len(points) &gt;= MIN_POINTS:
    chosen = choose_power(points)
    report("chosen power {} %".format(chosen))

    if points[-1][1] == max(cpm for power, cpm in points):
        report("WARNING: CPM was still rising at {} % - the curve did not bend, the list may end too low".format(
            points[-1][0]))

    main = activate(MAIN_EXPERIMENT)
    original_main_power = find_laser_intensity(main).Value

    try:
        find_laser_intensity(main).Value = str(chosen)
        Zen.Acquisition.Execute(main)
        time.sleep(SETTLE_SECONDS)
        main_result = "finished"
        report("{} finished at {} %".format(MAIN_EXPERIMENT, chosen))
    except Exception as error:
        main_result = str(error)
        report("{} FAILED - {}".format(MAIN_EXPERIMENT, error))
    finally:
        try:
            find_laser_intensity(main).Value = original_main_power
        except Exception as error:
            report("RESTORE FAILED - {} - set {} back to {} % by hand".format(error, MAIN_EXPERIMENT, original_main_power))

else:
    report("only {} powers gave a CPM - {} was NOT run. Is {} long enough?".format(
        len(points), MAIN_EXPERIMENT, SCAN_EXPERIMENT))

record = {
    "scan_experiment": SCAN_EXPERIMENT,
    "main_experiment": MAIN_EXPERIMENT,
    "laser_line": LASER_LINE,
    "power_fraction": POWER_FRACTION,
    "chosen_power_percent": chosen,
    "main_result": main_result,
    "focus_z": Zen.Devices.Focus.ActualPosition,
    "time": time.strftime("%Y-%m-%d %H:%M:%S"),
    "measurements": measurements,
}

json_path = Path.Combine(Environment.GetFolderPath(Environment.SpecialFolder.Desktop),
                         "smart_fcs_{}.json".format(time.strftime("%Y%m%d_%H%M%S")))
with open(json_path, "w") as json_file:
    json.dump(record, json_file, indent=2)
report("written {}".format(json_path))

output = ZenWindow()
output.Initialize("smart_fcs")
output.AddMultiLineTextBox("report", "Full data in {}".format(json_path), "\n".join(REPORT))
output.Show()
</Text>
  <Author></Author>
  <Description></Description>
  <Keywords></Keywords>
  <Row>1</Row>
  <Column>1</Column>
</Script>
